<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="150" y="150" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Condensing"/>
      <CellType TypeId="2" TypeName="NonCondensing"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Condensing" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="NonCondensing" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="Condensing">16.0</Energy>
      <Energy Type1="Medium" Type2="NonCondensing">4.0</Energy>
      <Energy Type1="Condensing" Type2="Condensing">2.0</Energy>
      <Energy Type1="Condensing" Type2="NonCondensing">11.0</Energy>
      <Energy Type1="NonCondensing" Type2="NonCondensing">16.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="75" y="75" z="0"/>
         <Radius>40</Radius>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Condensing,NonCondensing</Types>
      </Region>
   </Steppable>
</CompuCell3D>
