<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>3000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Condensing"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Condensing">10.0</Energy>
      <Energy Type1="Condensing" Type2="Condensing">10.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
   
</CompuCell3D>
