<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="100"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
      <Boundary_z>Periodic</Boundary_z>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="TCell"/>
      <CellType TypeId="2" TypeName="ActivatedTCell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="BoundaryPixelTracker">
        <!-- In order to use self.get_cell_boundary_pixel_list(cell) in steppables -->
        <NeighborOrder>1</NeighborOrder> 
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="TCell">20.0</Energy>
      <Energy Type1="Medium" Type2="ActivatedTCell">20.0</Energy>
      <Energy Type1="TCell" Type2="TCell">30.0</Energy>
      <Energy Type1="TCell" Type2="ActivatedTCell">30.0</Energy>
      <Energy Type1="ActivatedTCell" Type2="ActivatedTCell">30.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Dynabeads">
         <DiffusionData>
            <FieldName>Dynabeads</FieldName>
            <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         </DiffusionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <Periodic/>
            </Plane>
            <Plane Axis="Y">
               <Periodic/>
            </Plane>
            <Plane Axis="Z">
               <Periodic/>
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
 
</CompuCell3D>
